// B-Spline transformation
(UseDirectionCosines "true")

//ImageTypes
(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)
(ResultImagePixelType "float")

//Components
(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Transform "BSplineTransform")
(Interpolator "BSplineInterpolator")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Metric "AdvancedNormalizedCorrelation")

// ::::::::::::::::::::::::::::: Parameters to tune :::::::::::::::::::::::::::::::::::::::

// :::: Pyramid
(NumberOfResolutions 1)
(ImagePyramidSchedule 1 1 1)


// :::: Optimizer - StandardGradientDescent ::::

// Maximum number of iterations
(MaximumNumberOfIterations 1)

// :::: ImageSampler :::: 

// Number of sample (2000 - 5000)
(NumberOfSpatialSamples 10)

// If UseRandomSampleRegion is set to "false", the sampler draws samples from the entire image domain.
// When set to "true", the sampler randomly selects one voxel, and then selects the remaining
// samples in a square neighbourhood (in mm) around that voxel (localized similarity measure).
(UseRandomSampleRegion "false")
(SampleRegionSize 50.0 50.0 50.0)


// :::: Transform ::::
// Grid of control points
// This grid is defined by the spacing between the grid nodes, in voxel size
// For each resolution level you can define a different grid spacing. This is what we call multi-grid.
// The GridSpacingSchedule defines the multiplication factors for all resolution levels.
(FinalGridSpacingInPhysicalUnits 10.0 10.0 10.0)
(GridSpacingSchedule 1.0 1.0 1.0)


// ::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::::


// :::: Transform ::::
// Whether transforms are combined by composition or by addition.
// In generally, Compose is the best option in most cases.
// It does not influence the results very much.
(HowToCombineTransforms "Compose")


// :::: Several ::::
(ErodeMask "false" )
(WriteTransformParametersEachIteration "false")
(WriteResultImage "false")
(CompressResultImage "false")
(WriteResultImageAfterEachResolution "false") 
(ShowExactMetricValue "false")


// :::: Metric ::::
//Number of grey level bins in each resolution level:
(NumberOfHistogramBins 32 )
(FixedLimitRangeRatio 0.0)
(MovingLimitRangeRatio 0.0)
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(UseFastAndLowMemoryVersion "true")


// :::: ImageSampler :::: 
(ImageSampler "Random")
(FixedImageBSplineInterpolationOrder 1 )
(NewSamplesEveryIteration "true")
(CheckNumberOfSamples "false")
(MaximumNumberOfSamplingAttempts 10)


// :::: Optimizer - StandardGradientDescent ::::
//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 100.0 )
(SP_a 0.0 )
//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.6 ) 


// :::: Interpolator and Resampler ::::
//Order of B-Spline interpolation used in each resolution level:
// It may improve accuracy if you set this to 3. Never use 0.
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final
// deformation.
// 3 gives good accuracy.
// 1 gives worse accuracy (linear interpolation)
// 0 gives worst accuracy, but may be appropriate for 
// binary images; this would be equivalent to nearest neighbor
// interpolation.
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)

(ResultImageFormat "nii.gz")
